WorkflowBuilder(Version=2.8.5)
GroupWorkflow Camera
    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #1
    ExternalizedMapping(SerialNumber(DisplayName=CameraSeriaNumber)) => #2
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.Exposure)
    -> PropertyMapping(ExposureTime) => #5
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.Gain)
    -> PropertyMapping(Gain) => #8
    #1, #2, #5, #8 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=24282622, ColorProcessing=Default, ExposureTime=7000, Gain=0, Binning=1, TriggerSource=Line3)
    -> PublishSubject CameraStream
    -> WorkflowOutput

GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.LoggingRootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:\Users\neurogears\source\repos\swc\hypnose\temp_data, ChunkSize=1)

    SubscribeSubject SessionSettings => #4
    SubscribeSubject BehaviorEvents => #5
    #4, #5 -> SubscribeWhen
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject EventsO0
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer0, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject EventsO1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer1, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Behavior, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject ExperimentEvents
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=ExperimentEvents, Selector=nil)

    SubscribeSubject BehaviorCommands
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorCommands, Selector=nil)

    SubscribeSubject CameraStream => #22
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.FrameRate)
    -> PropertyMapping(FrameRate) => #25
    #22, #25 -> IncludeWorkflow(Path=Aeon.Video:LogVideo.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=VideoData, FrameRate=50)

    SubscribeSubject BehaviorNotifications
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorNotifications, Selector=nil)

GroupWorkflow Behavior
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM27) => #2
    -> PublishSubject BehaviorEvents
    -> WorkflowOutput
    #2 -> Last
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> PublishSubject BehaviorNotifications

    BooleanProperty(Value=false)
    -> BehaviorSubject CurrentSampleState

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.PortDIOStateEvent) => #11
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO1))
    -> DistinctUntilChanged
    -> PublishSubject DI0
    #11 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO2))
    -> DistinctUntilChanged
    -> PublishSubject DI1

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
    -> DistinctUntilChanged => #21
    -> Condition Onset
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> WorkflowOutput
    -> PublishSubject SampleOnset
    #21 -> Condition Offset
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> WorkflowOutput
    -> PublishSubject SampleOffset

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=2))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RewardPort0

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=4))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RewardPort1

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort1)) => #38
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort2)) => #39
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2")) => #40
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0")) => #41
    #38, #39, #40, #41 -> Merge
    -> MulticastSubject BehaviorCommands

    BehaviorSubject<DataSchema.RewardCommand> RewardCommand
    -> SelectMany Reward
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Command

        SubscribeSubject Command
        -> Condition RewardLocation1
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort1))
        -> MulticastSubject BehaviorCommands
        -> Delay(DueTime=PT0.01S) => #7
        SubscribeSubject Command
        -> MemberSelector(Selector=RewardTime)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(PulseSupplyPort1) => #11
        #7, #11 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort1Payload(PulseSupplyPort1=100))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
        -> MulticastSubject BehaviorCommands => #15
        SubscribeSubject Command
        -> Condition RewardLocation2
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort2))
        -> MulticastSubject BehaviorCommands
        -> Delay(DueTime=PT0.01S) => #20
        SubscribeSubject Command
        -> MemberSelector(Selector=RewardTime)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(PulseSupplyPort2) => #24
        #20, #24 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort2Payload(PulseSupplyPort2=100))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
        -> MulticastSubject BehaviorCommands => #28
        #15, #28 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput

IncludeWorkflow
  Path=Extensions\Olfactometer.bonsai
  PortO0=COM28
  EventsO0=EventsO0
  PortO1=COM26
  EventsO1=EventsO1
  OlfactometerEvents=OlfactometerEvents
  SessionSettings=SessionSettings
  OlfactometerCommand=OlfactometerCommand

ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
-> LoadSessionSettings(Path=sampling-time-debug.yml)
-> Take(Count=1)
-> AsyncSubject SessionSettings

Bonsai.Numerics.CreateRandom(Seed=nil)
-> BehaviorSubject RandomSource

ExternalizedMapping(Filter(DisplayName=StartCameraKey))
-> Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #11
SubscribeSubject SessionSettings
-> MemberSelector(Selector=CameraProperties.FrameRate)
-> PropertyMapping(Camera0Frequency) => #14
#11, #14 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=50))
-> MulticastSubject BehaviorCommands
-> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
-> MulticastSubject BehaviorCommands

GroupWorkflow SustainedPokes
    SubscribeSubject SampleOnset => #0
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.MinimumSampleTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #4
    #0, #4 -> Delay(DueTime=PT0.1S) => #5
    SubscribeSubject SampleOffset => #6
    #5, #6 -> TakeUntil
    -> Repeat
    -> PublishSubject SustainedSampleOnset
    -> SelectMany SustainedOffset
        WorkflowInput Source1

        SubscribeSubject SampleOffset => #1
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.SampleOffsetTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #5
        #1, #5 -> Delay(DueTime=PT0.1S) => #6
        SubscribeSubject SampleOnset => #7
        #6, #7 -> TakeUntil
        -> WorkflowOutput
    -> PublishSubject SustainedSampleOffset

Disable Unit
-> Disable Sink SetDefault
    WorkflowInput Source1
    -> StringProperty(Value=Default)
    -> MulticastSubject OlfactometerCommand
    -> WorkflowOutput
-> Disable SelectMany ChooseRandomSequence => #22
    WorkflowInput Source1
    -> StringProperty(Value=ChooseRandomSequence)
    -> MulticastSubject ExperimentEvents

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Sequences)
    -> UniformSampleList
    -> Take(Count=1)
    -> WorkflowOutput
-> Disable SelectMany SampleRewardCondition => #23
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardConditions)
    -> Take(Count=1)
    -> AsyncSubject RewardConditions
    -> StringProperty(Value=SampleRewardCondition)
    -> MulticastSubject ExperimentEvents

    SubscribeSubject RandomSource => #6
    SubscribeSubject RewardConditions
    -> MemberSelector(Selector=Count)
    -> Subtract(Operand=IntProperty(Value=1))
    -> PropertyMapping(Upper) => #10
    #6, #10 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.Sample
    -> Take(Count=1)
    -> WorkflowOutput
#23, #22 -> Disable Zip
-> Disable SelectMany InitiationSequence
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SequenceInfo
    -> StringProperty(Value=InitiationSequence)
    -> MulticastSubject ExperimentEvents

    SubscribeSubject SequenceInfo => #5
    -> Condition R1
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2.RewardConditions)
    -> Index(Operand=IntProperty(Value=0)) => #8
    #5 -> Condition R2
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2.RewardConditions)
    -> Index(Operand=IntProperty(Value=1)) => #11
    #8, #11 -> Merge => #12
    -> MemberSelector(Selector=Definition)
    -> Merge
    -> UniformSampleList => #15
    #12 -> MemberSelector(Selector=Position) => #16
    #15, #16 -> WithLatestFrom => #17
    SubscribeSubject SustainedSampleOnset => #18
    #17, #18 -> SubscribeWhen
    -> CreateObservable PresentStimulus
        WorkflowInput Source1
        -> MulticastSubject CurrentValence
        -> MemberSelector(Selector=Item1.Command)
        -> MulticastSubject OlfactometerCommand => #3
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.PresentationTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #7
        #3, #7 -> Delay(DueTime=PT3S) => #8
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.InterCommand)
        -> PropertyMapping(Value) => #11
        #8, #11 -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand => #13
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.InterCommandTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #17
        #13, #17 -> Delay(DueTime=PT0.2S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat => #21
    SubscribeSubject SustainedSampleOffset => #22
    #21, #22 -> TakeUntil
    -> Repeat

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialCanComplete

    SubscribeSubject SequenceInfo
    -> MemberSelector(Selector=Item2.MinimumEngagementTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S) => #31
    SubscribeSubject SustainedSampleOnset => #32
    #31, #32 -> SubscribeWhen => #33
    SubscribeSubject SustainedSampleOffset => #34
    #33, #34 -> TakeUntil
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialCanComplete
    -> Repeat

    BehaviorSubject<System.Tuple(DataSchema.Valence,System.Int32)> CurrentValence => #39
    SubscribeSubject SustainedSampleOffset => #40
    SubscribeSubject TrialCanComplete => #41
    SubscribeSubject SequenceInfo
    -> MemberSelector(Selector=Item2.CompletionRequiresEngagement)
    -> BitwiseNot => #44
    #41, #44 -> WithLatestFrom
    -> BitwiseOr => #46
    #40, #46 -> WithLatestFrom
    -> Condition CompletionConditionsMet => #48
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    #39, #48 -> TakeUntil
    -> LastOrDefault => #50
    SubscribeSubject SequenceInfo
    -> MemberSelector(Selector=Item2) => #52
    #50, #52 -> WithLatestFrom => #53
    SubscribeSubject TrialCanComplete => #54
    #53, #54 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        it.Item1.Item1 as RewardInfo,
        it.Item1.Item2 as Sequence,
        it.Item2 as TrialComplete
        )
    -> WorkflowOutput

    SubscribeSubject SequenceInfo
    -> MemberSelector(Selector=Item2.EnableTrialIndicator)
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
    -> MulticastSubject BehaviorCommands
-> Disable SelectMany EndInitiation => #26
    WorkflowInput Source1 => #0
    -> StringProperty(Value=EndInitiation)
    -> MulticastSubject ExperimentEvents
    -> StringProperty(Value=Purge)
    -> MulticastSubject OlfactometerCommand
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
    -> MulticastSubject BehaviorCommands => #6
    #6, #0 -> Zip
    -> MemberSelector(Selector=Item2)
    -> Take(Count=1)
    -> WorkflowOutput
-> Disable Condition TrialValid
    WorkflowInput Source1
    -> MemberSelector(Selector=TrialComplete)
    -> WorkflowOutput
-> Disable SelectMany ActivateReward
    WorkflowInput Source1 => #0
    -> Condition RewardIndicatorsEnabled => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
        -> WorkflowOutput
    -> Condition R1
        WorkflowInput Source1
        -> MemberSelector(Selector=RewardInfo.Item2)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
    -> MulticastSubject BehaviorCommands => #4
    #1 -> Condition R2
        WorkflowInput Source1
        -> MemberSelector(Selector=RewardInfo.Item2)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
    -> MulticastSubject BehaviorCommands => #7
    #4, #7 -> Merge
    -> BooleanProperty(Value=true) => #9
    #9, #1 -> Zip => #10
    #0 -> Condition RewardIndicatorsDisabled => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #12
    #12, #11 -> Zip => #13
    #10, #13 -> Merge
    -> Take(Count=1)
    -> MemberSelector(Selector=Item2)
    -> WorkflowOutput
    #1 -> StringProperty(Value=ActivateReward)
    -> MulticastSubject ExperimentEvents
-> Disable SelectMany AwaitReward => #29
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject RewardInfo
    -> StringProperty(Value=AwaitReward)
    -> MulticastSubject ExperimentEvents

    SubscribeSubject RewardPort0 => #5
    SubscribeSubject RewardInfo => #6
    #5, #6 -> WithLatestFrom => #7
    -> Condition R1 => #8
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.RewardInfo.Item2)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RewardTime)
    -> PropertyMapping(RewardTime) => #11
    #8, #11 -> DataSchema.RewardCommand(RewardTime=0.1, RewardPosition=0)
    -> MulticastSubject RewardCommand
    -> BooleanProperty(Value=true) => #14
    #7 -> Condition R2
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.RewardInfo.Item2)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Condition MaxAttempts
        WorkflowInput Source1 => #0
        SubscribeSubject Attempts => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
        #3, #5 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #17
    SubscribeSubject RewardPort1 => #18
    SubscribeSubject RewardInfo => #19
    #18, #19 -> WithLatestFrom => #20
    -> Condition R2 => #21
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.RewardInfo.Item2)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RewardTime)
    -> PropertyMapping(RewardTime) => #24
    #21, #24 -> DataSchema.RewardCommand(RewardTime=0.1, RewardPosition=1)
    -> MulticastSubject RewardCommand
    -> BooleanProperty(Value=true) => #27
    #20 -> Condition R1
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.RewardInfo.Item2)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Condition MaxAttempts
        WorkflowInput Source1 => #0
        SubscribeSubject Attempts => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
        #3, #5 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #30
    SubscribeSubject RewardInfo
    -> MemberSelector(Selector=RewardInfo.Item1)
    -> NullOrUnrewarded
    -> Condition NoReward
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #35
    SubscribeSubject RewardInfo
    -> MemberSelector(Selector=Sequence.ResponseTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10S, Period=PT0S)
    -> BooleanProperty(Value=false) => #41
    #14, #17, #27, #30, #35, #41 -> Merge => #42
    SubscribeSubject RewardInfo
    -> MemberSelector(Selector=Sequence) => #44
    #42, #44 -> Zip
    -> MemberSelector(Selector=Item2)
    -> Take(Count=1)
    -> WorkflowOutput

    SubscribeSubject RewardPort0 => #49
    SubscribeSubject RewardPort1 => #50
    #49, #50 -> Merge
    -> IntProperty(Value=1)
    -> Accumulate => #53
    IntProperty(Value=0) => #54
    #53, #54 -> Merge
    -> BehaviorSubject Attempts
#26 -> Disable Condition TrialInvalid
    WorkflowInput Source1
    -> MemberSelector(Selector=TrialComplete)
    -> BitwiseNot
    -> WorkflowOutput
-> Disable MemberSelector(Selector=Sequence)
-> Disable Take(Count=1) => #32
#29, #32 -> Disable Merge
-> Disable SelectMany Reset
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SequenceInfo

    SubscribeSubject SequenceInfo
    -> StringProperty(Value=Reset)
    -> MulticastSubject ExperimentEvents
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
    -> MulticastSubject BehaviorCommands
    -> StringProperty(Value=Default)
    -> MulticastSubject OlfactometerCommand => #9
    SubscribeSubject SequenceInfo
    -> MemberSelector(Selector=InterTrialInterval)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #13
    #9, #13 -> Delay(DueTime=PT0S)
    -> Take(Count=1)
    -> WorkflowOutput
-> Disable Repeat

SubscribeSubject SessionSettings
-> MemberSelector(Selector=Sequences)
-> Merge
-> CreateObservable SequenceProgression
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SequenceSelections

    SubscribeSubject SequenceSelections
    -> Sink SetDefault
        WorkflowInput Source1
        -> StringProperty(Value=Default)
        -> MulticastSubject OlfactometerCommand
        -> WorkflowOutput
    -> SelectMany ChooseRandomSequence => #5
        WorkflowInput Source1 => #0
        -> UniformSampleList => #1
        #0 -> StringProperty(Value=ChooseRandomSequence)
        -> MulticastSubject ExperimentEvents => #3
        #1, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany SampleRewardCondition => #6
        WorkflowInput Source1
        -> MemberSelector(Selector=RewardConditions)
        -> Take(Count=1)
        -> AsyncSubject RewardConditions
        -> StringProperty(Value=SampleRewardCondition)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject RandomSource => #6
        SubscribeSubject RewardConditions
        -> MemberSelector(Selector=Count)
        -> Subtract(Operand=IntProperty(Value=1))
        -> PropertyMapping(Upper) => #10
        #6, #10 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
        -> Bonsai.Numerics.Distributions.Sample
        -> Take(Count=1)
        -> WorkflowOutput
    #6, #5 -> Zip
    -> SelectMany InitiationSequence
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SequenceInfo
        -> StringProperty(Value=InitiationSequence)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject SequenceInfo => #5
        -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.RewardConditions)
        -> Index(Operand=IntProperty(Value=0)) => #8
        #5 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.RewardConditions)
        -> Index(Operand=IntProperty(Value=1)) => #11
        #8, #11 -> Merge => #12
        -> MemberSelector(Selector=Definition)
        -> Merge
        -> UniformSampleList => #15
        #12 -> MemberSelector(Selector=Position) => #16
        #15, #16 -> WithLatestFrom => #17
        SubscribeSubject SustainedSampleOnset => #18
        #17, #18 -> SubscribeWhen
        -> CreateObservable PresentStimulus
            WorkflowInput Source1
            -> MulticastSubject CurrentValence
            -> MemberSelector(Selector=Item1.Command)
            -> MulticastSubject OlfactometerCommand => #3
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.PresentationTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #7
            #3, #7 -> Delay(DueTime=PT2S) => #8
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommand)
            -> PropertyMapping(Value) => #11
            #8, #11 -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand => #13
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.InterCommandTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #17
            #13, #17 -> Delay(DueTime=PT0.2S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Concat => #21
        SubscribeSubject SustainedSampleOffset => #22
        #21, #22 -> TakeUntil
        -> Repeat

        SubscribeSubject SustainedSampleOffset
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand

        BooleanProperty(Value=false)
        -> BehaviorSubject TrialCanComplete

        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.MinimumEngagementTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.5S, Period=PT0S) => #34
        SubscribeSubject SustainedSampleOnset => #35
        #34, #35 -> SubscribeWhen => #36
        SubscribeSubject SustainedSampleOffset => #37
        #36, #37 -> TakeUntil
        -> BooleanProperty(Value=true)
        -> MulticastSubject TrialCanComplete
        -> Repeat

        BehaviorSubject<System.Tuple(DataSchema.Valence,System.Int32)> CurrentValence => #42
        SubscribeSubject SustainedSampleOffset => #43
        SubscribeSubject TrialCanComplete => #44
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.CompletionRequiresEngagement)
        -> BitwiseNot => #47
        #44, #47 -> WithLatestFrom
        -> BitwiseOr => #49
        #43, #49 -> WithLatestFrom
        -> Condition CompletionConditionsMet => #51
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        #42, #51 -> TakeUntil
        -> LastOrDefault => #53
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2) => #55
        #53, #55 -> WithLatestFrom => #56
        SubscribeSubject TrialCanComplete => #57
        #56, #57 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
            it.Item1.Item1 as RewardInfo,
            it.Item1.Item2 as Sequence,
            it.Item2 as TrialComplete
            )
        -> WorkflowOutput

        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.EnableTrialIndicator)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
        -> MulticastSubject BehaviorCommands
    -> SelectMany EndInitiation => #9
        WorkflowInput Source1 => #0
        -> StringProperty(Value=EndInitiation)
        -> MulticastSubject ExperimentEvents
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
        -> MulticastSubject BehaviorCommands => #6
        #6, #0 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition TrialValid
        WorkflowInput Source1
        -> MemberSelector(Selector=TrialComplete)
        -> WorkflowOutput
    -> SelectMany ActivateReward
        WorkflowInput Source1 => #0
        -> Condition RewardIndicatorsEnabled => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
            -> WorkflowOutput
        -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
        -> MulticastSubject BehaviorCommands => #4
        #1 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
        -> MulticastSubject BehaviorCommands => #7
        #4, #7 -> Merge
        -> BooleanProperty(Value=true) => #9
        #9, #1 -> Zip => #10
        #0 -> Condition RewardIndicatorsDisabled => #11
            WorkflowInput Source1
            -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #12
        #12, #11 -> Zip => #13
        #10, #13 -> Merge
        -> Take(Count=1)
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
        #1 -> StringProperty(Value=ActivateReward)
        -> MulticastSubject ExperimentEvents
    -> SelectMany AwaitReward => #12
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject RewardInfo
        -> StringProperty(Value=AwaitReward)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject RewardPort0 => #5
        SubscribeSubject RewardInfo => #6
        #5, #6 -> WithLatestFrom => #7
        -> Condition R1 => #8
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RewardTime)
        -> PropertyMapping(RewardTime) => #11
        #8, #11 -> DataSchema.RewardCommand(RewardTime=0.1, RewardPosition=0)
        -> MulticastSubject RewardCommand
        -> BooleanProperty(Value=true) => #14
        #7 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Condition MaxAttempts
            WorkflowInput Source1 => #0
            SubscribeSubject Attempts => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
            #3, #5 -> Zip
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #17
        SubscribeSubject RewardPort1 => #18
        SubscribeSubject RewardInfo => #19
        #18, #19 -> WithLatestFrom => #20
        -> Condition R2 => #21
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RewardTime)
        -> PropertyMapping(RewardTime) => #24
        #21, #24 -> DataSchema.RewardCommand(RewardTime=0.1, RewardPosition=1)
        -> MulticastSubject RewardCommand
        -> BooleanProperty(Value=true) => #27
        #20 -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition MaxAttempts
            WorkflowInput Source1 => #0
            SubscribeSubject Attempts => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
            #3, #5 -> Zip
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #30
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=RewardInfo.Item1)
        -> NullOrUnrewarded
        -> Condition NoReward
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #35
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence.ResponseTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT10S, Period=PT0S)
        -> BooleanProperty(Value=false) => #41
        #14, #17, #27, #30, #35, #41 -> Merge => #42
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence) => #44
        #42, #44 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject RewardPort0 => #49
        SubscribeSubject RewardPort1 => #50
        #49, #50 -> Merge
        -> IntProperty(Value=1)
        -> Accumulate => #53
        IntProperty(Value=0) => #54
        #53, #54 -> Merge
        -> BehaviorSubject Attempts
    #9 -> Condition TrialInvalid
        WorkflowInput Source1
        -> MemberSelector(Selector=TrialComplete)
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector=Sequence)
    -> Take(Count=1) => #15
    #12, #15 -> Merge
    -> SelectMany Reset
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SequenceInfo

        SubscribeSubject SequenceInfo
        -> StringProperty(Value=Reset)
        -> MulticastSubject ExperimentEvents
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
        -> MulticastSubject BehaviorCommands
        -> StringProperty(Value=Default)
        -> MulticastSubject OlfactometerCommand => #9
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=InterTrialInterval)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #13
        #9, #13 -> Delay(DueTime=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Concat
-> Repeat

SubscribeSubject OlfactometerCommand
SubscribeSubject ExperimentEvents

SubscribeSubject RewardCommand => #44
-> Condition R1
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardPosition)
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> IntProperty(Value=1) => #46
IntProperty(Value=0) => #47
#46, #47 -> Merge
-> Accumulate => #49
#44 -> Condition R2
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardPosition)
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> IntProperty(Value=1) => #51
#51, #47 -> Merge
-> Accumulate => #53
#49, #53 -> CombineLatest
-> Format(Format="R1: {0}, R2: {1}", Selector="Item1,Item2")

Bonsai.Windows.Input.KeyDown(Filter=Escape, SuppressRepetitions=false)
-> Take(Count=1)
-> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
-> MulticastSubject BehaviorCommands
-> StringProperty(Value=Default)
-> MulticastSubject OlfactometerCommand
-> WorkflowOutput

StringProperty(Value=Start)
-> BehaviorSubject ExperimentEvents

SubscribeSubject CameraStream
-> MemberSelector(Selector=Value.Image)
